# Generated by Configurator on Tue Dec 01 17:57:36 PST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,Shutter-A,SutterLambda,Shutter-A
Device,Shutter-B,SutterLambda,Shutter-B
Device,Wheel-A,SutterLambda,Wheel-A
Device,Wheel-B,SutterLambda,Wheel-B
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,QuantEM,PVCAM,Camera-1

# Pre-init settings for devices
Property,COM1,AnswerTimeout,5000.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM1,DataBits,8
Property,COM1,Fast USB to Serial,Disable
Property,Shutter-A,Port,COM1
Property,Shutter-B,Port,COM1
Property,Wheel-A,Port,COM1
Property,Wheel-A,Timeout(ms),500
Property,Wheel-B,Port,COM1
Property,Wheel-B,Timeout(ms),500

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,QuantEM
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Wheel-A
Label,Wheel-A,9,Open
Label,Wheel-A,8,465/30nm
Label,Wheel-A,7,580/10nm
Label,Wheel-A,6,515/10nm
Label,Wheel-A,5,560/40nm
Label,Wheel-A,4,495/10nm
Label,Wheel-A,3,660/20nm
Label,Wheel-A,2,590/40nm
Label,Wheel-A,1,546/11nm
Label,Wheel-A,0,420/20nm
# Wheel-B
Label,Wheel-B,9,Open
Label,Wheel-B,8,Closed
Label,Wheel-B,7,Closed
Label,Wheel-B,6,Closed
Label,Wheel-B,5,650/100nm
Label,Wheel-B,4,630/20nm
Label,Wheel-B,3,575/20nm
Label,Wheel-B,2,535/40nm
Label,Wheel-B,1,535/30nm
Label,Wheel-B,0,480/40nm
# TINosePiece
Label,TINosePiece,5,None
Label,TINosePiece,4,100x
Label,TINosePiece,3,40x
Label,TINosePiece,2,20x
Label,TINosePiece,1,10x
Label,TINosePiece,0,None
# TIFilterBlock1
Label,TIFilterBlock1,5,TXRED
Label,TIFilterBlock1,4,GFP
Label,TIFilterBlock1,3,560LP
Label,TIFilterBlock1,2,525LP-545/30EM
Label,TIFilterBlock1,1,455LP
Label,TIFilterBlock1,0,DIC
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100

# Configuration presets
# Group: Magnification
# Preset: 20x
ConfigGroup,Magnification,20x,TINosePiece,Label,20x

# Preset: 40x
ConfigGroup,Magnification,40x,TINosePiece,Label,40x

# Preset: 10x
ConfigGroup,Magnification,10x,TINosePiece,Label,10x

# Preset: 100x
ConfigGroup,Magnification,100x,TINosePiece,Label,100x


# Group: Channel
# Preset: YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,525LP-545/30EM
ConfigGroup,Channel,YFP,Wheel-A,Label,515/10nm
ConfigGroup,Channel,YFP,Wheel-B,Label,Open
ConfigGroup,Channel,YFP,Shutter-A,State,0
ConfigGroup,Channel,YFP,Shutter-B,State,0
ConfigGroup,Channel,YFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,YFP,Core,AutoShutter,1

# Preset: CFP
ConfigGroup,Channel,CFP,TIFilterBlock1,Label,455LP
ConfigGroup,Channel,CFP,Wheel-A,Label,420/20nm
ConfigGroup,Channel,CFP,Wheel-B,Label,480/40nm
ConfigGroup,Channel,CFP,Shutter-A,State,0
ConfigGroup,Channel,CFP,Shutter-B,State,0
ConfigGroup,Channel,CFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,CFP,Core,AutoShutter,1

# Preset: DIC
ConfigGroup,Channel,DIC,TIFilterBlock1,Label,DIC
ConfigGroup,Channel,DIC,Wheel-A,Label,Open
ConfigGroup,Channel,DIC,Wheel-B,Label,Open
ConfigGroup,Channel,DIC,Shutter-A,State,0
ConfigGroup,Channel,DIC,Shutter-B,State,0
ConfigGroup,Channel,DIC,Core,Shutter,Shutter-B
ConfigGroup,Channel,DIC,Core,AutoShutter,1

# Preset: RFP
ConfigGroup,Channel,RFP,TIFilterBlock1,Label,TXRED
ConfigGroup,Channel,RFP,Wheel-A,Label,Open
ConfigGroup,Channel,RFP,Wheel-B,Label,Open
ConfigGroup,Channel,RFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,RFP,Shutter-A,State,0
ConfigGroup,Channel,RFP,Shutter-B,State,0
ConfigGroup,Channel,RFP,Core,AutoShutter,1

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,GFP
ConfigGroup,Channel,GFP,Wheel-A,Label,Open
ConfigGroup,Channel,GFP,Wheel-B,Label,Open
ConfigGroup,Channel,GFP,Core,Shutter,Shutter-A
ConfigGroup,Channel,GFP,Shutter-A,State,0
ConfigGroup,Channel,GFP,Shutter-B,State,0
ConfigGroup,Channel,GFP,Core,AutoShutter,1

# Preset: FRET
ConfigGroup,Channel,FRET,TIFilterBlock1,Label,455LP
ConfigGroup,Channel,FRET,Wheel-A,Label,420/20nm
ConfigGroup,Channel,FRET,Wheel-B,Label,535/30nm
ConfigGroup,Channel,FRET,Shutter-A,State,0
ConfigGroup,Channel,FRET,Shutter-B,State,0
ConfigGroup,Channel,FRET,Core,Shutter,Shutter-A
ConfigGroup,Channel,FRET,Core,AutoShutter,1


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TILightPath,Label,Left100
ConfigGroup,System,Startup,QuantEM,Exposure,100.0000
ConfigGroup,System,Startup,QuantEM,CCDTemperatureSetPoint,-30.0000
ConfigGroup,System,Startup,Wheel-A,Speed,1
ConfigGroup,System,Startup,Wheel-B,Speed,1
ConfigGroup,System,Startup,QuantEM,MultiplierGain,50


# Group: LightPath
# Preset: Eye100
ConfigGroup,LightPath,Eye100,TILightPath,Label,Eye100

# Preset: Left100
ConfigGroup,LightPath,Left100,TILightPath,Label,Left100



# PixelSize settings

