# Generated by Configurator on Tue Jul 09 15:45:13 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,QuantEM,PVCAM,Camera-1
Device,Shutter-A-Excitation,SutterLambda,Shutter-A
Device,Shutter-B-Transmittal,SutterLambda,Shutter-B
Device,Wheel-A-Excitation,SutterLambda,Wheel-A
Device,Wheel-B-Emission,SutterLambda,Wheel-B
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,Shutter-A-Excitation,Port,COM4
Property,Shutter-B-Transmittal,Port,COM4
Property,Wheel-A-Excitation,Port,COM4
Property,Wheel-A-Excitation,Timeout(ms),500
Property,Wheel-B-Emission,Port,COM4
Property,Wheel-B-Emission,Timeout(ms),500
Property,XYStage,Port,COM3

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,5000.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM1,DataBits,8
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM3,Fast USB to Serial,Disable
Property,COM4,AnswerTimeout,2000.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions
FocusDirection,TIZDrive,1
FocusDirection,TIPFSOffset,1

# Roles
Property,Core,Camera,QuantEM
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Wheel-A-Excitation
Label,Wheel-A-Excitation,9,Open
Label,Wheel-A-Excitation,8,465/30 nm blue
Label,Wheel-A-Excitation,7,580/10 nm mCherry2
Label,Wheel-A-Excitation,6,515/10x nm mOrange2
Label,Wheel-A-Excitation,5,560/40 nm mCherry1
Label,Wheel-A-Excitation,4,495/10x nm YFP
Label,Wheel-A-Excitation,3,660/20 nm Red deactivation
Label,Wheel-A-Excitation,2,590/40 nm Red activation
Label,Wheel-A-Excitation,1,546/11 nm mOrange1
Label,Wheel-A-Excitation,0,420/20 nm CFP
# Wheel-B-Emission
Label,Wheel-B-Emission,9,Open
Label,Wheel-B-Emission,8,Closed
Label,Wheel-B-Emission,7,Closed
Label,Wheel-B-Emission,6,Closed
Label,Wheel-B-Emission,5,650/100 nm mCherry2
Label,Wheel-B-Emission,4,630/20 nm mCherry1
Label,Wheel-B-Emission,3,575/20 nm Orange2
Label,Wheel-B-Emission,2,535/40 nm Fura2
Label,Wheel-B-Emission,1,535/25 nm YFP
Label,Wheel-B-Emission,0,480/40 nm CFP
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Fluor 40x NA 1.30 Oil
Label,TINosePiece,3,4-Plan Apo VC 100x NA 1.40 Oil
Label,TINosePiece,2,3-Plan 20x NA 0.40 Dry
Label,TINosePiece,1,2-Plan 10x NA 0.25 Dry
Label,TINosePiece,0,1-Plan 10x NA 0.25 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-TxRed
Label,TIFilterBlock1,4,5-GFP-L
Label,TIFilterBlock1,3,4-YFPHQ
Label,TIFilterBlock1,2,3-G-2B
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1-ANALY
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Magnification
# Preset: 3-Plan 20x NA 0.40 Dry
ConfigGroup,Magnification,3-Plan 20x NA 0.40 Dry,TINosePiece,Label,3-Plan 20x NA 0.40 Dry

# Preset: 2-Plan 10x NA 0.25 Dry
ConfigGroup,Magnification,2-Plan 10x NA 0.25 Dry,TINosePiece,Label,2-Plan 10x NA 0.25 Dry

# Preset: 5-Plan Fluor 40x NA 1.30 Oil
ConfigGroup,Magnification,5-Plan Fluor 40x NA 1.30 Oil,TINosePiece,Label,5-Plan Fluor 40x NA 1.30 Oil

# Preset: 4-Plan Apo VC 100x NA 1.40 Oil
ConfigGroup,Magnification,4-Plan Apo VC 100x NA 1.40 Oil,TINosePiece,Label,4-Plan Apo VC 100x NA 1.40 Oil

# Preset: 6-Unknown
ConfigGroup,Magnification,6-Unknown,TINosePiece,Label,6-Unknown

# Preset: 1-Plan 10x NA 0.25 Dry
ConfigGroup,Magnification,1-Plan 10x NA 0.25 Dry,TINosePiece,Label,1-Plan 10x NA 0.25 Dry


# Group: Channel
# Preset: mScarlet
ConfigGroup,Channel,mScarlet,TIFilterBlock1,Label,4-YFPHQ
ConfigGroup,Channel,mScarlet,Wheel-A-Excitation,Label,546/11 nm mOrange1
ConfigGroup,Channel,mScarlet,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,mScarlet,Shutter-A-Excitation,State,0
ConfigGroup,Channel,mScarlet,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,mScarlet,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,mScarlet,Core,AutoShutter,1

# Preset: None
ConfigGroup,Channel,None,TIFilterBlock1,Label,5-GFP-L
ConfigGroup,Channel,None,Wheel-A-Excitation,Label,465/30 nm blue
ConfigGroup,Channel,None,Wheel-B-Emission,Label,Closed
ConfigGroup,Channel,None,Shutter-A-Excitation,State,0
ConfigGroup,Channel,None,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,None,Core,AutoShutter,0

# Preset: mNeonGreen
ConfigGroup,Channel,mNeonGreen,TIFilterBlock1,Label,3-G-2B
ConfigGroup,Channel,mNeonGreen,Wheel-A-Excitation,Label,495/10x nm YFP
ConfigGroup,Channel,mNeonGreen,Wheel-B-Emission,Label,535/40 nm Fura2
ConfigGroup,Channel,mNeonGreen,Shutter-A-Excitation,State,0
ConfigGroup,Channel,mNeonGreen,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,mNeonGreen,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,mNeonGreen,Core,AutoShutter,1

# Preset: DIC
ConfigGroup,Channel,DIC,TIFilterBlock1,Label,1-ANALY
ConfigGroup,Channel,DIC,Wheel-A-Excitation,Label,Open
ConfigGroup,Channel,DIC,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,DIC,Shutter-A-Excitation,State,0
ConfigGroup,Channel,DIC,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,DIC,Core,Shutter,Shutter-B-Transmittal
ConfigGroup,Channel,DIC,Core,AutoShutter,1

# Preset: YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,3-G-2B
ConfigGroup,Channel,YFP,Wheel-A-Excitation,Label,495/10x nm YFP
ConfigGroup,Channel,YFP,Wheel-B-Emission,Label,535/25 nm YFP
ConfigGroup,Channel,YFP,Shutter-A-Excitation,State,0
ConfigGroup,Channel,YFP,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,YFP,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,YFP,Core,AutoShutter,1

# Preset: Blue-Light
ConfigGroup,Channel,Blue-Light,TIFilterBlock1,Label,5-GFP-L
ConfigGroup,Channel,Blue-Light,Wheel-A-Excitation,Label,465/30 nm blue
ConfigGroup,Channel,Blue-Light,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,Blue-Light,Shutter-A-Excitation,State,1
ConfigGroup,Channel,Blue-Light,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,Blue-Light,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,Blue-Light,Core,AutoShutter,0

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,5-GFP-L
ConfigGroup,Channel,GFP,Wheel-A-Excitation,Label,Open
ConfigGroup,Channel,GFP,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,GFP,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,GFP,Shutter-A-Excitation,State,0
ConfigGroup,Channel,GFP,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,GFP,Core,AutoShutter,1

# Preset: CFP
ConfigGroup,Channel,CFP,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,CFP,Wheel-A-Excitation,Label,420/20 nm CFP
ConfigGroup,Channel,CFP,Wheel-B-Emission,Label,480/40 nm CFP
ConfigGroup,Channel,CFP,Shutter-A-Excitation,State,0
ConfigGroup,Channel,CFP,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,CFP,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,CFP,Core,AutoShutter,1

# Preset: FRET
ConfigGroup,Channel,FRET,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,FRET,Wheel-A-Excitation,Label,420/20 nm CFP
ConfigGroup,Channel,FRET,Wheel-B-Emission,Label,535/25 nm YFP
ConfigGroup,Channel,FRET,Shutter-A-Excitation,State,0
ConfigGroup,Channel,FRET,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,FRET,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,FRET,Core,AutoShutter,1

# Preset: mCherry
ConfigGroup,Channel,mCherry,TIFilterBlock1,Label,6-TxRed
ConfigGroup,Channel,mCherry,Wheel-A-Excitation,Label,Open
ConfigGroup,Channel,mCherry,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,mCherry,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,mCherry,Shutter-A-Excitation,State,0
ConfigGroup,Channel,mCherry,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,mCherry,Core,AutoShutter,1


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TILightPath,Label,2-Left100
ConfigGroup,System,Startup,QuantEM,Exposure,400.0000
ConfigGroup,System,Startup,QuantEM,Gain,1
ConfigGroup,System,Startup,QuantEM,CCDTemperatureSetPoint,0.0000


# Group: LightPath
# Preset: 2-Left100
ConfigGroup,LightPath,2-Left100,TILightPath,Label,2-Left100

# Preset: 3-Right100
ConfigGroup,LightPath,3-Right100,TILightPath,Label,3-Right100

# Preset: 1-Eye100
ConfigGroup,LightPath,1-Eye100,TILightPath,Label,1-Eye100

# Preset: 4-Left80
ConfigGroup,LightPath,4-Left80,TILightPath,Label,4-Left80



# PixelSize settings

