# Generated by Configurator on Tue Apr 03 18:37:06 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,QuantEM,PrincetonInstruments,Camera-1
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Wheel-A-Excitation,SutterLambda,Wheel-A
Device,Wheel-B-Emission,SutterLambda,Wheel-B
Device,Shutter-A-Excitation,SutterLambda,Shutter-A
Device,Shutter-B-Transmittal,SutterLambda,Shutter-B
Device,XYStage,Prior,XYStage

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,9600
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1
Property,Wheel-A-Excitation,Port,COM2
Property,Wheel-A-Excitation,Timeout(ms),500
Property,Wheel-B-Emission,Port,COM2
Property,Wheel-B-Emission,Timeout(ms),500
Property,Shutter-A-Excitation,Port,COM2
Property,Shutter-B-Transmittal,Port,COM2
Property,XYStage,Port,COM1

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays
Delay,TIFilterBlock1,250.0

# Focus directions

# Roles
Property,Core,Camera,QuantEM
Property,Core,Shutter,Shutter-A-Excitation
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Apo VC 100x NA 1.40 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 1.30 Oil
Label,TINosePiece,2,3-Plan 20x NA 0.40 Dry
Label,TINosePiece,1,2-Plan 10x NA 0.25 Dry
Label,TINosePiece,0,1-Plan 10x NA 0.25 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-TxRed
Label,TIFilterBlock1,4,5-GFP-L
Label,TIFilterBlock1,3,4-YFPHQ
Label,TIFilterBlock1,2,3-G-2B
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1-ANALY
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100
# Wheel-A-Excitation
Label,Wheel-A-Excitation,9,Open
Label,Wheel-A-Excitation,8,465/30 nm blue
Label,Wheel-A-Excitation,7,580/10 nm mCherry2
Label,Wheel-A-Excitation,6,515/10x nm mOrange2
Label,Wheel-A-Excitation,5,560/40 nm mCherry1
Label,Wheel-A-Excitation,4,495/10x nm YFP
Label,Wheel-A-Excitation,3,660/20 nm Red deactivation
Label,Wheel-A-Excitation,2,590/40 nm Red activation
Label,Wheel-A-Excitation,1,546/11 nm mOrange1
Label,Wheel-A-Excitation,0,420/20 nm CFP
# Wheel-B-Emission
Label,Wheel-B-Emission,9,Open
Label,Wheel-B-Emission,8,Closed
Label,Wheel-B-Emission,7,Closed
Label,Wheel-B-Emission,6,Closed
Label,Wheel-B-Emission,5,650/100 nm mCherry2
Label,Wheel-B-Emission,4,630/20 nm mCherry1
Label,Wheel-B-Emission,3,575/20 nm Orange2
Label,Wheel-B-Emission,2,535/40 nm Fura2
Label,Wheel-B-Emission,1,535/25 nm YFP
Label,Wheel-B-Emission,0,480/40 nm CFP

# Configuration presets
# Group: Camera-PixelType
# Preset: 16bit
ConfigGroup,Camera-PixelType,16bit,QuantEM,PixelType,16bit


# Group: Channel
# Preset: YFP
ConfigGroup,Channel,YFP,TIFilterBlock1,Label,3-G-2B
ConfigGroup,Channel,YFP,Wheel-A-Excitation,Label,495/10x nm YFP
ConfigGroup,Channel,YFP,Wheel-B-Emission,Label,535/25 nm YFP
ConfigGroup,Channel,YFP,Shutter-A-Excitation,State,0
ConfigGroup,Channel,YFP,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,YFP,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,YFP,Core,AutoShutter,1

# Preset: CFP
ConfigGroup,Channel,CFP,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,CFP,Wheel-A-Excitation,Label,420/20 nm CFP
ConfigGroup,Channel,CFP,Wheel-B-Emission,Label,480/40 nm CFP
ConfigGroup,Channel,CFP,Shutter-A-Excitation,State,0
ConfigGroup,Channel,CFP,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,CFP,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,CFP,Core,AutoShutter,1

# Preset: Induction-460nm
ConfigGroup,Channel,Induction-460nm,TIFilterBlock1,Label,6-TxRed
ConfigGroup,Channel,Induction-460nm,Wheel-A-Excitation,Label,465/30 nm blue
ConfigGroup,Channel,Induction-460nm,Wheel-B-Emission,Label,Closed
ConfigGroup,Channel,Induction-460nm,Shutter-A-Excitation,State,1
ConfigGroup,Channel,Induction-460nm,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,Induction-460nm,Core,Shutter,
ConfigGroup,Channel,Induction-460nm,Core,AutoShutter,0

# Preset: mCherry
ConfigGroup,Channel,mCherry,TIFilterBlock1,Label,6-TxRed
ConfigGroup,Channel,mCherry,Wheel-A-Excitation,Label,Open
ConfigGroup,Channel,mCherry,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,mCherry,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,mCherry,Shutter-A-Excitation,State,0
ConfigGroup,Channel,mCherry,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,mCherry,Core,AutoShutter,1

# Preset: DIC
ConfigGroup,Channel,DIC,TIFilterBlock1,Label,1-ANALY
ConfigGroup,Channel,DIC,Wheel-A-Excitation,Label,Open
ConfigGroup,Channel,DIC,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,DIC,Shutter-A-Excitation,State,0
ConfigGroup,Channel,DIC,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,DIC,Core,Shutter,Shutter-B-Transmittal
ConfigGroup,Channel,DIC,Core,AutoShutter,1

# Preset: GFP
ConfigGroup,Channel,GFP,TIFilterBlock1,Label,5-GFP-L
ConfigGroup,Channel,GFP,Wheel-A-Excitation,Label,Open
ConfigGroup,Channel,GFP,Wheel-B-Emission,Label,Open
ConfigGroup,Channel,GFP,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,GFP,Shutter-A-Excitation,State,0
ConfigGroup,Channel,GFP,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,GFP,Core,AutoShutter,1

# Preset: FRET
ConfigGroup,Channel,FRET,TIFilterBlock1,Label,2-CFPHQ
ConfigGroup,Channel,FRET,Wheel-A-Excitation,Label,420/20 nm CFP
ConfigGroup,Channel,FRET,Wheel-B-Emission,Label,535/25 nm YFP
ConfigGroup,Channel,FRET,Shutter-A-Excitation,State,0
ConfigGroup,Channel,FRET,Shutter-B-Transmittal,State,0
ConfigGroup,Channel,FRET,Core,Shutter,Shutter-A-Excitation
ConfigGroup,Channel,FRET,Core,AutoShutter,1


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,QuantEM,Exposure,100.0000
ConfigGroup,System,Startup,QuantEM,Gain,1
ConfigGroup,System,Startup,TINosePiece,Label,2-Plan 10x NA 0.25 Dry
ConfigGroup,System,Startup,TIFilterBlock1,Label,6-TxRed
ConfigGroup,System,Startup,TILightPath,Label,4-Left80
ConfigGroup,System,Startup,Core,Shutter,Shutter-B-Transmittal


# Group: Camera-ShutterMode
# Preset: Open Shutter Pre-Trigger
ConfigGroup,Camera-ShutterMode,Open Shutter Pre-Trigger,QuantEM,ShutterMode,Open Shutter Pre-Trigger

# Preset: Open Shutter Pre-Exposure
ConfigGroup,Camera-ShutterMode,Open Shutter Pre-Exposure,QuantEM,ShutterMode,Open Shutter Pre-Exposure

# Preset: Never Open Shutter
ConfigGroup,Camera-ShutterMode,Never Open Shutter,QuantEM,ShutterMode,Never Open Shutter

# Preset: Open Shutter Pre-Sequence
ConfigGroup,Camera-ShutterMode,Open Shutter Pre-Sequence,QuantEM,ShutterMode,Open Shutter Pre-Sequence

# Preset: Do Not Change Shutter State
ConfigGroup,Camera-ShutterMode,Do Not Change Shutter State,QuantEM,ShutterMode,Do Not Change Shutter State


# Group: Camera-ClearMode
# Preset: Clear Pre-Sequence
ConfigGroup,Camera-ClearMode,Clear Pre-Sequence,QuantEM,ClearMode,Clear Pre-Sequence

# Preset: Clear Never
ConfigGroup,Camera-ClearMode,Clear Never,QuantEM,ClearMode,Clear Never

# Preset: Clear Pre-Exposure and Post-Sequence
ConfigGroup,Camera-ClearMode,Clear Pre-Exposure and Post-Sequence,QuantEM,ClearMode,Clear Pre-Exposure and Post-Sequence

# Preset: Clear Post-Sequence
ConfigGroup,Camera-ClearMode,Clear Post-Sequence,QuantEM,ClearMode,Clear Post-Sequence

# Preset: Clear Pre- and Post-Sequence
ConfigGroup,Camera-ClearMode,Clear Pre- and Post-Sequence,QuantEM,ClearMode,Clear Pre- and Post-Sequence

# Preset: Clear Pre-Exposure
ConfigGroup,Camera-ClearMode,Clear Pre-Exposure,QuantEM,ClearMode,Clear Pre-Exposure



# PixelSize settings

