# Generated by Configurator on Sun Apr 01 19:15:14 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM2,SerialManager,COM2
Device,QuantEM,PrincetonInstruments,Camera-1
Device,TIScope,NikonTI,TIScope
Device,TIAnalyzer,NikonTI,TIAnalyzer
Device,TINosePiece,NikonTI,TINosePiece
Device,TIFilterBlock1,NikonTI,TIFilterBlock1
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus

# Pre-init settings for devices

# Pre-init settings for COM ports
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,9600
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1

# Hub (parent) references
Parent,TIAnalyzer,TIScope
Parent,TINosePiece,TIScope
Parent,TIFilterBlock1,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,QuantEM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
Label,TINosePiece,5,6-Unknown
Label,TINosePiece,4,5-Plan Apo VC 100x NA 1.40 Oil
Label,TINosePiece,3,4-Plan Fluor 40x NA 1.30 Oil
Label,TINosePiece,2,3-Plan 20x NA 0.40 Dry
Label,TINosePiece,1,2-Plan 10x NA 0.25 Dry
Label,TINosePiece,0,1-Plan 10x NA 0.25 Dry
# TIFilterBlock1
Label,TIFilterBlock1,5,6-TxRed
Label,TIFilterBlock1,4,5-GFP-L
Label,TIFilterBlock1,3,4-YFPHQ
Label,TIFilterBlock1,2,3-G-2B
Label,TIFilterBlock1,1,2-CFPHQ
Label,TIFilterBlock1,0,1-ANALY
# TILightPath
Label,TILightPath,3,4-Left80
Label,TILightPath,2,3-Right100
Label,TILightPath,1,2-Left100
Label,TILightPath,0,1-Eye100

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

